PsychoPy2experiment version="2020.1.2"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=8AEF277B
  Experiment info = {'Age *': '', 'Gender *': '', "Highest level of education completed so far (e.g. High school/grade (US); GCSE/Secondary School (UK); A-Levels; Bachelor's degree etc.) *": '', 'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  color = White
  expName = Understanding Graphs
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Routines
  Routine graph_presentation
    ImageComponent graph
      image [set every repeat] = $graph_image
      size = (1.26, 0.648)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    CodeComponent hidecursor3
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
      End Routine:
        win.mouseVisible = True
  Routine graph_response
    ImageComponent blank_graph
      image [set every repeat] = $blank_graph_image
      size = (1.26, 0.648)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_done
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = $EnableKeyboard
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    SliderComponent slider_1
      color = Black
      forceEndRoutine = False
      granularity = 0
      pos = (-0.266, 0.021)
      saveStartStop = False
      size = (0.03, 0.566)
      startVal [time (s)] = 0
      styles = ['rating']
      ticks = (0,1)
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    SliderComponent slider_2
      color = Black
      forceEndRoutine = False
      granularity = 0
      pos = (0, 0.021)
      saveStartStop = False
      size = (0.03, 0.566)
      startVal [time (s)] = 0
      styles = ['rating']
      ticks = (0,1)
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    SliderComponent slider_3
      color = Black
      forceEndRoutine = False
      granularity = 0
      pos = (0.266, 0.021)
      saveStartStop = False
      size = (0.03, 0.566)
      startVal [time (s)] = 0
      styles = ['rating']
      ticks = (0,1)
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    TextComponent text_4
      color = Black
      letterHeight = 0.03
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the spacebar to move on once you have positioned the slider.
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    CodeComponent EnableKeyboard
      Code Type = Auto->JS
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      Begin Routine:
        EnableKeyboard= False
      Each Frame:
        EnableKeyboard= slider_1.rating and slider_2.rating and slider_3.rating
    TextComponent text_8
      color = Black
      letterHeight = 0.03
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click on each line (and adjust if necessary) to mark where the average was.
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  Routine scenario_intro
    TextComponent text
      color = Black
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $intro_text
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    TextComponent text_3
      color = Black
      letterHeight = 0.03
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the spacebar to start.
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    KeyboardComponent key_resp_scenario_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.0
      store = nothing
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  Routine tutorial
    ImageComponent tutorial_graph
      image [set every repeat] = $tut_graph_image
      saveStartStop = False
      size = (1.134, 0.648)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent tutorial_text
      color = black
      letterHeight = 0.035
      pos = (0, 0.26)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $tut_text
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  Routine instr_prac_end
    TextComponent instr_prac_end_text
      color = black
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The practice has now finished.

        The experiment will start when you press the spacebar.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_prac_intro
    TextComponent instr_prac_intro_text
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prac_instructions_text
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent example1
      image = tutorial_and_prac_graphs/example1.png
      pos = (-0.25, 0.1)
      size = (0.410, 0.252)
      startVal [time (s)] = 0.0
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    ImageComponent example2
      image = tutorial_and_prac_graphs/example2.png
      pos = (0.25, 0.1)
      size = (0.410, 0.252)
      startVal [time (s)] = 0.0
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    ImageComponent example3
      image = tutorial_and_prac_graphs/example3.png
      pos = (-0.25, -0.2)
      size = (0.410, 0.252)
      startVal [time (s)] = 0.0
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    ImageComponent example4
      image = tutorial_and_prac_graphs/example4.png
      pos = (0.25, -0.2)
      size = (0.410, 0.252)
      startVal [time (s)] = 0.0
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  Routine prac1_presentation
    ImageComponent prac1_graph
      image = tutorial_and_prac_graphs/prac1.png
      saveStartStop = False
      size = (1.134, 0.648)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    CodeComponent hidecursor1
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
      End Routine:
        win.mouseVisible = True
  Routine prac1_response
    ImageComponent prac1_blank_graph
      image [set every repeat] = tutorial_and_prac_graphs/prac1_blank.png
      saveStartStop = False
      size = (1.134, 0.648)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = prac1_slider2.rating
      store = nothing
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    SliderComponent prac1_slider2
      color = Black
      forceEndRoutine = False
      granularity = 0
      pos = (0, 0.021)
      saveStartStop = False
      size = (0.03, 0.566)
      startVal [time (s)] = 0.01
      storeRating = False
      storeRatingTime = False
      styles = ['rating']
      ticks = (0,1)
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    TextComponent text_2
      color = Black
      letterHeight = 0.03
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the spacebar to move on once you have positioned the slider.
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    TextComponent text_6
      color = Black
      letterHeight = 0.03
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click on the line (and adjust if necessary) to mark where the average was.
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  Routine prac2_presentation
    ImageComponent prac2_graph
      image = tutorial_and_prac_graphs/pracfull.png
      saveStartStop = False
      size = (1.134, 0.648)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    CodeComponent hidecursor2
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
      End Routine:
        win.mouseVisible = True
  Routine prac2_response
    ImageComponent prac2_blank_graph
      image = tutorial_and_prac_graphs/pracfull_blank.png
      saveStartStop = False
      size = (1.134, 0.648)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = $EnableKeyboard
      store = nothing
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    SliderComponent prac2_slider1
      color = Black
      forceEndRoutine = False
      granularity = 0
      pos = (-0.266, 0.021)
      saveStartStop = False
      size = (0.03, 0.566)
      startVal [time (s)] = 0.01
      storeRating = False
      storeRatingTime = False
      styles = ['rating']
      ticks = (0,1)
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    SliderComponent prac2_slider2
      color = Black
      forceEndRoutine = False
      granularity = 0
      pos = (0, 0.021)
      saveStartStop = False
      size = (0.03, 0.566)
      startVal [time (s)] = 0.01
      storeRating = False
      storeRatingTime = False
      styles = ['rating']
      ticks = (0,1)
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    SliderComponent prac2_slider3
      color = Black
      forceEndRoutine = False
      granularity = 0
      pos = (0.266, 0.021)
      saveStartStop = False
      size = (0.03, 0.566)
      startVal [time (s)] = 0.01
      storeRating = False
      storeRatingTime = False
      styles = ['rating']
      ticks = (0,1)
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    TextComponent text_5
      color = Black
      letterHeight = 0.03
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the spacebar to move on once you have positioned the slider.
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    CodeComponent EnableKeyboard_2
      Code Type = Auto->JS
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      Begin Routine:
        EnableKeyboard= False
      Each Frame:
        EnableKeyboard= prac2_slider1.rating and prac2_slider2.rating and prac2_slider3.rating
    TextComponent text_7
      color = Black
      letterHeight = 0.03
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click on each line (and adjust if necessary) to mark where the average was.
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  Routine task_instr
    TextComponent task_instr_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this experiment, you will be asked to estimate the average value for clusters of raw data, as shown in the example you just saw.
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine debrief
    TextComponent text_9
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please note that all data presented in this study was fictional and does not reflect real world data.

        Press 'y' to indicate that you understand this.
    KeyboardComponent key_resp_debrief
      allowedKeys = 'y'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
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  Routine finish
    TextComponent text_10
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The experiment has now finished.

        Please press the space bar and follow the instructions to complete your submission.

        Thank you for taking part.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      store = nothing
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  Routine consent
    KeyboardComponent key_resp_consent
      allowedKeys = 'y'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
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    TextComponent text_11
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $new_questionText
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    TextComponent text_12
      color = Black
      letterHeight = 0.03
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $consent_number
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    TextComponent text_15
      color = Black
      letterHeight = 0.03
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press 'y' if you agree to the above. If you do not agree please quit the experiment by pressing the 'Escape' key.
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  Routine instr_start
    TextComponent instr_text
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Your browser should now be in full-screen mode. Please do not exit full-screen mode.

        You might hear an 'error' sound when you use your keyboard during this experiment. This is normal and should simply be ignored.

        Please read the following information carefully.

        Press the spacebar to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_tutorial
    TextComponent instr_text_2
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you. Please read the following information carefully.

        Press the spacebar to move on after you have finished reading each slide.
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine del_2
    TextComponent text_14
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The following graph will be displayed for 4 seconds.

        I will look for the average value for each city.
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine movie
    MovieComponent myVid
      backend = moviepy
      forceEndRoutine = True
      movie [set every repeat] = tutorial_video.mp4
      saveStartStop = False
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name,leftButton
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instr_movie
    TextComponent instr_text_3
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will now watch a short video explaining your task.

        Please ensure your sound is on. If you cannot hear the sound whilst the video plays, please watch anyway, and follow the instructions on screen.

        Press the spacebar to continue.
    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_prac
    TextComponent instr_text_4
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will now be given an opportunity to practice this.

        First, try a graph with one dot-cluster, then try a graph with three dot-clusters.

        Press the spacebar to continue.
    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_movie_2
    TextComponent instr_text_5
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will now watch a short video explaining your task.

        Please ensure your sound is on.

        Press the spacebar to continue.
    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_movie_3
    TextComponent instr_text_6
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will now watch a short video explaining your task.

        Please ensure your sound is on.

        Press the spacebar to continue.
    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine sound_3
    SoundComponent tutorial_video_sound
      saveStartStop = False
      sound [set every repeat] = tutorial_video_sound.wav
      startVal [time (s)] = 0.0
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    ImageComponent mov1
      image [set every repeat] = mov_images/mov1.png
      saveStartStop = False
      size = (1.8, 1.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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    ImageComponent mov2
      image = mov_images/mov2.png
      saveStartStop = False
      size = (1.8, 1.125)
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 4.0
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    ImageComponent mov3
      image = mov_images/mov3.png
      saveStartStop = False
      size = (1.8, 1.125)
      startVal [time (s)] = 12.0
      stopVal [duration (s)] = 5.0
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    ImageComponent mov4
      image = mov_images/mov4.png
      saveStartStop = False
      size = (1.8, 1.125)
      startVal [time (s)] = 17.0
      stopVal [duration (s)] = 10.0
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    ImageComponent mov5
      image = mov_images/mov5.png
      saveStartStop = False
      size = (1.8, 1.125)
      startVal [time (s)] = 27.0
      stopVal [duration (s)] = 3.0
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    ImageComponent mov6
      image = mov_images/mov6.png
      saveStartStop = False
      size = (1.8, 1.125)
      startVal [time (s)] = 30.0
      stopVal [duration (s)] = 5.0
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    ImageComponent mov7
      image = mov_images/mov7.png
      saveStartStop = False
      size = (1.8, 1.125)
      startVal [time (s)] = 35.0
      stopVal [duration (s)] = 3.5
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    ImageComponent mov8
      image = mov_images/mov8.png
      saveStartStop = False
      size = (1.8, 1.125)
      startVal [time (s)] = 38.5
      stopVal [duration (s)] = 1.5
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    ImageComponent mov9
      image = mov_images/mov9.png
      saveStartStop = False
      size = (1.8, 1.125)
      startVal [time (s)] = 40.0
      stopVal [duration (s)] = 4.5
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    ImageComponent mov10
      image = mov_images/mov10.png
      saveStartStop = False
      size = (1.8, 1.125)
      startVal [time (s)] = 44.5
      stopVal [duration (s)] = 2.5
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    ImageComponent mov11
      image = mov_images/mov11.png
      saveStartStop = False
      size = (1.8, 1.125)
      startVal [time (s)] = 47.0
      stopVal [duration (s)] = 1.0
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    ImageComponent mov12
      image = mov_images/mov12.png
      saveStartStop = False
      size = (1.8, 1.125)
      startVal [time (s)] = 48.0
      stopVal [duration (s)] = 7.0
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Flow
  Routine instr_start
  LoopInitiator consent_form loopType="TrialHandler"
    conditionsFile = lists/consent_form.csv
    loopType = sequential
    nReps = 1
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    Routine consent
  LoopTerminator consent_form
  Routine instr_tutorial
  LoopInitiator tutorial_loop loopType="TrialHandler"
    conditionsFile = lists/tutorial.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine tutorial
  LoopTerminator tutorial_loop
  Routine instr_movie
  Routine sound_3
  Routine instr_prac
  LoopInitiator prac1 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine prac1_presentation
    Routine prac1_response
  LoopTerminator prac1
  LoopInitiator prac2 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine prac2_presentation
    Routine prac2_response
  LoopTerminator prac2
  Routine instr_prac_end
  LoopInitiator choose_blocks loopType="TrialHandler"
    conditionsFile = lists/choose_block.csv
    loopType = random
    nReps = 1
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    Routine scenario_intro
    LoopInitiator block_name loopType="TrialHandler"
      conditionsFile = $block_file
      loopType = random
      nReps = 1
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      Routine graph_presentation
      Routine graph_response
    LoopTerminator block_name
  LoopTerminator choose_blocks
  Routine debrief
  Routine finish
